PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = GameInterfacePsychopy
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Welcome
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent welcome
      image = /Users/tiana/Documents/Neurohack-2025/psychopy/images/Welcome.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine baselineInstructions
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    ImageComponent collectbaselineslide
      image = /Users/tiana/Documents/Neurohack-2025/psychopy/images/baseline.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixationCross
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    ImageComponent fixationcross
      image = /Users/tiana/Documents/Neurohack-2025/psychopy/images/fixationcross.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
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  Routine instructions
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    ImageComponent instructionss
      image = /Users/tiana/Documents/Neurohack-2025/psychopy/images/instructions.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine level1
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    ImageComponent level1im
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine Welcome
  Routine instructions
  Routine fixationCross
